PsychoPy2experiment version="2024.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = words-area-segmentation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Teste
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    PolygonComponent polygon
      fillColor = 0.0824, -0.6627, 0.7725
      shape = rectangle
      size = text.boundingBox[0],text.boundingBox[1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_origin
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Teste
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #spliting words inside of the textbox

        palavras = text.text.split();
        tamanhos_das_palavras = []

        for palavra in palavras:
            text = visual.TextStim(win=win, name='text',
                text=palavra,
                font='Open Sans',
                pos=(0, 0), height=60.0, wrapWidth=None, ori=0.0,
                color=[-1.0000, -1.0000, -1.0000], colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);
            print(palavra)
            tamanhos_das_palavras.append(text.boundingBox)
  Routine tamanhos
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #catching words size (w,h).
        tamanho = " "
        for palavra in tamanhos_das_palavras:
            tamanho += "("+str(palavra[0])+","+str(palavra[1])+")\n"
    TextComponent text_3
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $tamanho
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  Routine teste_display_palavras
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Teste
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    PolygonComponent polygon_3
      anchor = top-left
      fillColor = 0.6471, -0.1765, -0.7647
      pos = (-tamanhos_das_palavras[0][0],0)
      shape = rectangle
      size = tamanhos_das_palavras[0][0],tamanhos_das_palavras[0][1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine insert_blocks_in_textsstim
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        # text_2.boundingBox # - (w,h)
        # e se juntarmos as caixas de texto até dar o que tem
        #nessa dai

        window_width = win.size[0] #width
        windows_height = win.size[1] #height
        point_0_0 = (win.size[0]/2, win.size[1]/2)

        #e agora qual o vértice inicial da box? Só calcular!
        #ESQUERDA
        y_text_box = (text.boundingBox[1]/2) + point_0_0[1]
        x_text_box = point_0_0[0] - (text.boundingBox[0]/2)

        # está dando um resultado alto no x. Algo está errado.

        #o (0,0) está no meio, logo: (win.size[0]/2, win.size[1]/2)
    PolygonComponent polygon_2
      fillColor = -0.2549, 0.2392, 0.2549
      pos = x_text_box, y_text_box
      shape = rectangle
      size = tamanhos_das_palavras[0][0],tamanhos_das_palavras[0][1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_4
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = It can be a tricky thing to navigate deciding when to open doors for someone following you without awkwardly standing there for too long.
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  Routine tamanho_texto_comp
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    TextComponent text_5
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $text.boundingBox
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  Routine pillow
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        from PIL import Image, ImageDraw, ImageFont
      Begin Experiment:
        def textsize(text, font):
            im = Image.new(mode="P", size=(0, 0))
            draw = ImageDraw.Draw(im)
            _, _, width, height = draw.textbbox((0, 0), text=text, font=font)
            return width, height

        # Define window size
        window_width = win.size[0]
        window_height = win.size[1]

        def translation_for_psychopys_coordinaate_system_x(x):
            x_new = (x*(win.size[0]//2))%win.size[0]
            return x_new

        def translation_for_psychopys_coordinaate_system_y(y):
            y_new = (y*(win.size[1]//2))%win.size[1]
            return y_new

        def translate_coordinate_x(x):
            """
            Translates coordinates from a system with (0,0) at the top-left corner
            to a system with (0,0) at the center.

            Parameters:
            x (float): The x-coordinate in the original system.
            y (float): The y-coordinate in the original system.
            width (float): The width of the coordinate system.
            height (float): The height of the coordinate system.

            Returns:
            (float, float): The translated x and y coordinates in the new system.
            """
            # Translate x-coordinate: Centered system has x = (x - width / 2)
            new_x = x - win.size[0] / 2
            return new_x

        def translate_coordinate_y(y):
            # Translate y-coordinate: Centered system has y = (height / 2 - y)
            new_y = win.size[1] / 2 - y
            return new_y


        print("Tamanho da tela: ",window_width," e ", window_height)


        # Define text component size (w, h) and its centered position
        text_component_width = text.boundingBox[0]
        text_component_height = text.boundingBox[1]

        print("Tamanho do comp: ",text_component_width," e ", text_component_height)

        ponto_central = [translate_coordinate_x(window_width/2), translate_coordinate_y(window_height/2)]

        # Calculate the top-left position of the text component
        #text_component_x = (window_width - text_component_width) // 2
        #text_component_y = (window_height - text_component_height) // 2
        text_component_x =translate_coordinate_x((ponto_central[0] - (text_component_width//2)))
        text_component_y = translate_coordinate_y((ponto_central[1] - (text_component_height//2)))

        print("X,y do comp: ",text_component_x," e ", text_component_y)

        # Define a sample list of words
        words = palavras

        # Create a blank image with the window size
        #image = Image.new('RGB', (window_width, window_height), 'white')
        #draw = ImageDraw.Draw(image)

        # Set font size (for demonstration, adjust as needed)
        font_size = 30
        font = ImageFont.truetype("opensans.ttf", font_size)

        # Calculate spacing and positions
        word_spacing = 20  # Space between words (in pixels)
        start_x = text_component_x + 10  # Starting x position within text component
        start_y = text_component_y + \
            (text_component_height - font_size) // 2  # Vertical centering

        print("Start pos: ", start_x, " e ",start_y)

        # Draw rectangles above each word
        rectangle_height = 30
        current_x = start_x

        roi_comp_coordinates = []

        for word in words:
            word_width, _ = textsize(word, font=font)

            # Rectangle coordinates
            x1 = current_x
            y1 = start_y - rectangle_height
            x2 = current_x + word_width
            y2 = start_y

            roi_comp_coordinates.append([x1,y1,x2,y2])
            # Draw a rectangle above the word
            #draw.rectangle([x1, y1, x2, y2], outline='red', width=2)

            # Update the x position for the next word
            current_x += word_width + word_spacing

        # Save or display the image
        #image.save('output_with_rectangles.png')
        #image.show()
    PolygonComponent polygon_4
      fillColor = 1.0000, -1.0000, -0.1922
      pos = roi_comp_coordinates[0][0],roi_comp_coordinates[0][1]
      shape = rectangle
      size = tamanhos_das_palavras[0][0],tamanhos_das_palavras[0][1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine multi_line_approach
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        def get_word_positions(text_stim,height_word):
            """
            Calculate the positions of words in a multi-line TextStim, accounting for varying line lengths.
            """
            lines = text_stim.text.splitlines()
            word_positions = []

            # Estimate line height
            line_height = text_stim.height * 1.2

            for i, line in enumerate(lines):
                # Create a temporary TextStim to measure the width of the line
                line_stim = visual.TextStim(win, text=line, pos=(0, 0), color=text_stim.color, units='pix',height=height_word)
                line_width, line_height = line_stim.boundingBox

                # Determine the starting x position for the current line
                current_x = -line_width / 2

                # Calculate y position for the current line
                current_y = text_stim.pos[1] + (len(lines) / 2 - i) * line_height -16

                for word in line.split():
                    # Create a temporary TextStim to measure the word width
                    word_stim = visual.TextStim(win, text=word, pos=(0, 0), color=text_stim.color, units='pix',height=height_word)
                    word_width, word_height = word_stim.boundingBox

                    # Calculate the position (center of the word)
                    word_position = (current_x + word_width / 2, current_y)

                    # Store word info
                    word_positions.append((word, word_position, word_width, word_height))

                    # Move to the next word position (accounting for space between words)
                    current_x += word_width + 5 # Space between words (use text size or adjust if needed)

            return word_positions


        # Calculate positions of each word
        word_positions = get_word_positions(text_stim,text_stim.height)

        # Draw rectangles around each word
        for word, pos, width, height in word_positions:
            rect_stim = visual.Rect(win, width=width * 1.1, height=height * 1.1,  # Some padding
                                    pos=pos, lineColor='black', fillColor='pink', units='pix')
            word = visual.ROI(win, name='word', device=eyetracker,
                debug=False,
                shape='rectangle',
                pos=(0, 0), size=(0.5, 0.5),
                anchor='center', ori=0.0, depth=-2
                )
            #eu devo adicionar mais funções para que o ROI funcione aqui?
            rect_stim.draw()
        # Draw the text again so it appears on top of the rectangles
        text_stim.draw()
        # Display everything
        win.flip()

        # Wait 5 sec
        core.wait(5)
        win.close()
        core.quit()
    TextComponent text_stim
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Juliana é linda
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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Flow
  Routine multi_line_approach
